PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [900, 600]
  expName = smts
  keyboardBackend = PsychToolbox
  logging level = data
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Routines
  Routine fixation
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    PolygonComponent fix
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine button_press
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    KeyboardComponent key_resp_2
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen beim SMTS.

        Wenn Sie bereit sind, drücken Sie die rechte oder die linke Taste, um den Trainingsdurchlauf zu starten
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent lsl_initiation
      Code Type = Auto->JS
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      Before Experiment:
        # Initiate LSL
        import pylsl

        # Make stream outlets & info for each "marker" we want to push, and a corresponding outlet
        print('Creating a new streaminfo...')
        screen_info = pylsl.StreamInfo('Psychopy', 'screen_pres', 1, 0, 'string')

        print('Opening an outlet...')
        screen_outlet = pylsl.StreamOutlet(screen_info)

        print("now sending markers...")
        psychopy_markers = [['Fixation'], ['Target'], ['ITI'], ['Correct'], ['Incorrect'], ['Repeat'], ['Identical'], ['Color_Change'], ['Locat_Change']]
    CodeComponent setup
      Code Type = Py
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      Begin Experiment:
        #Setup some of the variables that are used for experiment
        import time
        practice_counter = 0 #keep track of practice trials
        trial_counter = 0 #keep track of test trial we are in
        repeat_trial = False #default is set to continuing with next trial

        # actual buttons we observe
        same_button = 'left'
        different_button = 'right'

        #Color palette
        potential_colors = ['white', 'black', 'red', 'green', 'blue', 'orange', 'pink', 'purple', 'cyan', 'magenta', 'lightsteelblue', 'yellow', 'lightgreen']

        #Practice
        response_accuracy_practice = []
        repeat_trial_practice = False

        #Test trials
        response_accuracy_trial = []

        #Opacity for iti
        opacity_cross = None
        opacity_text = None

        #Feedback accuracy for iti
        accuracy_text = None

        #Trial numbers we want to have for practice and trials
        #can be changed as needed
        nReps_trial = 140 #140
        nReps_practice = 15 #15

        #Accuracy
        correct_response = None

        #Variable that is used to create break screens in between
        n_trial_break_one = 40 #40
        n_trial_break_two = 80 #80
        n_trial_break_three = 110 #110
        trial_break = None

        #Create unique locations so no locations of squares are overlapping
        def unique_locations(upper_limit):
            potential_location = []
            while len(potential_location) < upper_limit:
                potential_coord = 0.1*randint(-3,3)
                if potential_coord != 0 and not(potential_coord in potential_location):
                    potential_location.append(potential_coord)
            return potential_location

        #Function that creates four squares in which color/position are set
        def square_manipulation(squares_list, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, practice_switch):
            if decider_randomisation == 1: # if change
                if color_or_position == 1: #color changes
                    change_square = squares_list[square_to_change]
                    change_square.color = colors[4]
                    if practice_switch == 0: #only save for trial, not for practice
                        thisExp.addData('label_square', "Color_Change")
                elif color_or_position == 2: #position changes
                    change_square = squares_list[square_to_change]
                    change_square.pos = (x_coord[4], y_coord[4])
                    if practice_switch == 0:
                        thisExp.addData('label_square', "Locat_Change")
            else:
                if practice_switch == 0:
                    thisExp.addData('label_square', "No_change")
      Begin Routine:
        #Set seed -> every participants gets same randomization
        if '1' in test_condition.keys:
            np.random.seed(42)
            thisExp.addData('Condition', 'First')
        elif '2' in test_condition.keys:
            np.random.seed(69)
            thisExp.addData('Condition', 'Second')

        #Set up lists with possible conditions for practice and trials
        #Conditions: Squares stay identical, color change, location change, both change
        practice_list = [0]*5 + [1]*5 + [2]*5  #15 practice trials
        shuffle(practice_list)
        test_list = [0]*70 + [1]*35 + [2]*35 #140 test trials for part one
        shuffle(test_list)
  Routine start_training
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    TextComponent starting_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wenn Sie bereit sind, drücken Sie einen der Knöpfe um den Testdurchlauf zu starten
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    KeyboardComponent beginn_training
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_test
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    TextComponent starting_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch, Sie haben die Trainingsphase erfolgreich beendet!

        Bitte geben Sie der Versuchsleiterin Bescheid, um fortzufahren.
    KeyboardComponent beginn_test
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine square_ident
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    PolygonComponent fix_cross2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_1
      fillColor = white
      pos = (-0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_2
      fillColor = yellow
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_3
      fillColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_4
      fillColor = blue
      pos = (0.4, 0.4)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent practice_button_presses
      Code Type = Py
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      Begin Routine:
        ###### Randomization of location and color ######

        #Create list with all four squares that are used for comparison
        squares_test = [sqr_ident_1, sqr_ident_2, sqr_ident_3, sqr_ident_4]

        #bools to check if buttons are pressed
        same_button_pressed = False
        different_button_pressed = False
        trial_break = False

        #Register possible buttons
        same_button_time = 0
        different_button_time = 0

        #Button counter to avoid multiple registrations of button presses
        same_button_counter = 0
        different_button_counter = 0

        # initialize a keyboard listener - won't work if there is an additional response key in the routine...
        kb = keyboard.Keyboard()

        #Create variables for position and color
        #Set these to be identical to squares that were first displayed
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]

        square_manipulation(squares_test, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, 1)
      Each Frame:
        #Create conditions that register button presses
        #Decide whether last trial is repeated or if we go to the next trial

        keys = kb.getKeys([same_button, different_button], waitRelease = False, clear = False)

        for key in keys:
            if key == same_button and key.duration == None and same_button_counter == 0: # "left" is pressed and no duration assigned yet
                same_button_pressed = True
                same_button_counter = 1
            if key == different_button and key.duration == None and different_button_counter == 0: # "right"is pressed and no duration assigned yet
                different_button_pressed = True
                different_button_counter = 1
            if same_button_pressed == True and different_button_pressed == True: #left and right are pressed at the same time
                repeat_trial_practice = True
                continueRoutine = False
                different_button_counter = 1
                same_button_counter = 1
            #check if button is released and no second button pressed during that time
            if different_button_counter == 1:
                if key == different_button and key.duration != None: # "right" button pressed & released while duration is there
                    repeat_trial_practice = False
                    continueRoutine = False
                    different_button_time = key.tDown
            if same_button_counter == 1:
                if key == same_button and key.duration != None: # "left" button pressed and released with duration
                    repeat_trial_practice = False
                    continueRoutine = False
                same_button_time = key.tDown
      End Routine:
        #Create variable for accuracy (correct button presses)
        #Squares are identical -> decider_randomisation == 0 -> "left"
        #Squares are not identical (change of color/location) -> decider_randomisation != 0 -> "right"
        kb.clearEvents()

        #Save trial number in .csv file
        thisExp.addData('trial_number_practice', practice_counter)

        if different_button_pressed != 0 and same_button_pressed != 0 :  #"left" and "right" pressed: repeat trial
            opacity_text = 0 #don't show text
            opacity_cross = 1 #show cross because of repeat
            thisExp.addData('response_accuracy_practice', "Repeat/Checking")
            accuracy_text = '' #don't show any feedback on response
        elif same_button_time != 0 and decider_randomisation == 0: #squares identical
            correct_response = True
            response_accuracy_practice.append(1)
            thisExp.addData('response_accuracy_practice', "Correct")
            opacity_text = 1
            opacity_cross = 0
            accuracy_text = 'Richtig'
        elif different_button_time != 0 and decider_randomisation != 0: #squares not identical
            correct_response = True
            response_accuracy_practice.append(1)
            thisExp.addData('response_accuracy_practice', "Correct")
            opacity_text = 1
            opacity_cross = 0
            accuracy_text = 'Richtig'
        else:
            correct_response = False
            response_accuracy_practice.append(0) #wrong button was pressed
            thisExp.addData('response_accuracy_practice', "Incorrect")
            opacity_text = 1
            opacity_cross = 0
            accuracy_text = 'Falsch'

        #If at last trial, we want to continue without showing text
        #Also continue to main part of experiment
        if practice_counter == nReps_practice and repeat_trial_practice == False:
            opacity_text = 0
            opacity_cross = 0
            trials_practice.finished = True
  Routine square_ident_test
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    PolygonComponent sqr_ident_test_1
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_2
      fillColor = yellow
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_3
      fillColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_4
      fillColor = blue
      pos = (-0.1, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key_test
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares
        squares_test = [sqr_ident_test_1, sqr_ident_test_2, sqr_ident_test_3, sqr_ident_test_4]

        #0 or 1 gives decision which condition is used
        decider = randint(0,2)

        #Squares change from presentation to decision
        if repeat_trial == False and decider == 1:
            x_coord_ident = [0.1*randint(-5,5) for i in range(len(squares_test))]
            y_coord_ident = [0.1*randint(-5,5) for i in range(len(squares_test))]
        #Squares do not change from presentation to decision
        if repeat_trial == False and decider == 0:
            x_coord_ident = x_coord
            y_coord_ident = y_coord

        sqr_ident_test_1.pos = (x_coord_ident[0], y_coord_ident[0])
        sqr_ident_test_2.pos = (x_coord_ident[1], y_coord_ident[1])
        sqr_ident_test_3.pos = (x_coord_ident[2], y_coord_ident[2])
        sqr_ident_test_4.pos = (x_coord_ident[3], y_coord_ident[3])
      Each Frame:
        #Check if trial is repeated
        if response_key_test.keys:
            for key in response_key_test.keys:
                if key == 'r' or key == 's':
                    repeat_test.finished = False
                    repeat_trial = True
                else:
                    repeat_test.finished = True
                    repeat_trial = False
  Routine end_training
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Vielen Dank für die Teilnahme!
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    KeyboardComponent end_experiment
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sqr_practice
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    PolygonComponent fix_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr1
      fillColor = white
      pos [set every repeat] = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr2
      fillColor = yellow
      pos [set every repeat] = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr3
      fillColor = blue
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr4
      fillColor = red
      pos = (0.4, 0.4)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent practice_location_color
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares

        #Create list with four squares and one with potential colors to choose from
        squares_test = [sqr1, sqr2, sqr3, sqr4]

        #If task is not repeated, go on to next one
        if repeat_trial_practice == False:
             x_coord = unique_locations(5) #Create one extra position in case location changes
             y_coord = unique_locations(5) #Create one extra position in case location changes
             color_indices = randchoice(len(potential_colors), 5, replace = False) #get 5 indices to create one extra color
             colors = [potential_colors[i] for i in color_indices] #select shuffled colours
             if practice_list[practice_counter] == 0:
                decider_randomisation = 0 #squares stay the same
                color_or_position = 0
             elif practice_list[practice_counter] != 0:
                decider_randomisation = 1 #squares change (color, position, both)
                color_or_position = practice_list[practice_counter]
             square_to_change = randint(0,4) # for which square
             practice_counter = practice_counter + 1

        # set first squares with respective color and location
        # the created extra 5th location/color is not used here
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]
  Routine sqr_trial
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    PolygonComponent fix_cross_trial
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr1_trial
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr2_trial
      fillColor = green
      lineColor = green
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr3_trial
      fillColor = red
      lineColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr4_trial
      fillColor = blue
      lineColor = blue
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent trial_location_color
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares

        #Create list with four squares and one with potential colors to choose from
        squares_trial = [sqr1_trial, sqr2_trial, sqr3_trial, sqr4_trial]

        #If task is not repeated, go on to next one
        #New location, color and decision whether second set of stimuli
        #is going to be the same or with different properties
        if repeat_trial == False:
             x_coord = unique_locations(5) #Create one extra position in case location changes
             y_coord = unique_locations(5) #Create one extra position in case location changes
             color_indices = randchoice(len(potential_colors), 5, replace = False) #get 5 indices to create one extra color
             colors = [potential_colors[i] for i in color_indices] #select shuffled colours
             if test_list[trial_counter] == 0:
                decider_randomisation = 0 #squares stay the same
                color_or_position = 0
             elif test_list[trial_counter] != 0:
                decider_randomisation = 1 #squares change (color, position)
                color_or_position = test_list[trial_counter]
             square_to_change = randint(0,4) # for which square
             trial_counter = trial_counter + 1


        # set first squares with respective color and location
        # the created extra 5th location/color is not used here
        for i in range(len(squares_trial)):
             current_square = squares_trial[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]
             thisExp.addData(f"initial_square_{i}_pos", (x_coord[i], y_coord[i]))
             thisExp.addData(f"initial_square_{i}_color", colors[i])
  Routine sqr_ident_trial
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    PolygonComponent fix_cross_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_1_trial
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_2_trial
      fillColor = green
      lineColor = green
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_3_trial
      fillColor = red
      lineColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_4_trial
      fillColor = blue
      lineColor = blue
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent trial_button_presses
      Code Type = Py
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      Begin Routine:
        ###### Randomization of location and color ######

        #Placeholder for correctness of participant's answer
        correct_response = None

        #Bools to check if buttons are pressed
        same_button_pressed = False
        different_button_pressed = False
        trial_break = False

        #Variable for timing of button presses/release time
        same_button_time = 0
        different_button_time = 0

        #Button counter to avoid multiple registrations of button presses
        same_button_counter = 0
        different_button_counter = 0

        #Create list with all four squares that are used for comparison
        squares_test = [sqr_ident_1_trial, sqr_ident_2_trial, sqr_ident_3_trial, sqr_ident_4_trial]

        #Create variables for position and color
        #Set these to be identical to squares that were first displayed
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]

        square_manipulation(squares_test, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, 0)

        for i, square in enumerate(squares_test):
            if decider_randomisation == 1 and i == square_to_change:
                thisExp.addData(f'condition_square_{i}_pos', (x_coord[4], y_coord[4]))
                thisExp.addData(f'condition_square_{i}_color', colors[4])
            else:
                thisExp.addData(f'condition_square_{i}_pos', (x_coord[i], y_coord[i]))
                thisExp.addData(f'condition_square_{i}_color', colors[i])
      Each Frame:
        #Create conditions that register button presses
        #Decide whether last trial is repeated or if we go to the next trial

        keys = kb.getKeys([same_button, different_button], waitRelease=False, clear = False)

        for key in keys:
            if key == same_button and key.duration == None and same_button_counter == 0: # "left" is pressed and no duration assigned yet
                same_button_pressed = True
                same_button_counter = 1
            if key == different_button and key.duration == None and different_button_counter == 0: # "right"is pressed and no duration assigned yet
                different_button_pressed = True
                different_button_counter = 1
            if same_button_pressed == True and different_button_pressed == True: #left and right are pressed at the same time
                repeat_trial = True
                continueRoutine = False
                same_button_counter = 1
                different_button_counter = 1
            #check if button is released and no second button pressed during that time
            if different_button_counter == 1:
                if key == different_button and key.duration != None: # "right" button pressed & released while duration is there
                    repeat_trial = False
                    continueRoutine = False
                    different_button_time = key.tDown
            if same_button_counter == 1:
                if key == same_button and key.duration != None: # "left" button pressed and released with duration
                    repeat_trial = False
                    continueRoutine = False
                    same_button_time = key.tDown
      End Routine:
        #Create variable for accuracy (correct button presses)
        #Squares are identical -> decider_randomisation == 0 -> "left"
        #Squares are not identical (change of color/location) -> decider_randomisation != 0 -> "right"
        kb.clearEvents()

        #Save trial number in .csv file
        thisExp.addData('trial_number_main', trial_counter)

        if same_button_pressed != 0 and different_button_pressed != 0: #"left" and "right" pressed: repeat trial
            opacity_text = 0
            opacity_cross = 1
            thisExp.addData('response_accuracy', "Repeat/Checking")
        elif same_button_time != 0 and decider_randomisation == 0: #squares identical
            correct_response = True
            response_accuracy_trial.append(1)
            thisExp.addData('response_accuracy', "Correct")
            opacity_text = 1
            opacity_cross = 0
        elif different_button_time != 0 and decider_randomisation != 0: #squares not identical
            correct_response = True
            response_accuracy_trial.append(1)
            thisExp.addData('response_accuracy', "Correct")
            opacity_text = 1
            opacity_cross = 0
        else:
            correct_response = False
            response_accuracy_trial.append(0) #wrong button was pressed
            thisExp.addData('response_accuracy', "Incorrect")
            opacity_text = 1
            opacity_cross = 0

        #For last trial don't show cross
        #Do not repeat loop but finish experiment
        if trial_counter == nReps_trial and repeat_trial == False:
            opacity_text = 0
            opacity_cross = 0
            trials_trial.finished = True

        #Set break points at different time points
        if trial_counter == n_trial_break_one and repeat_trial == False:
            opacity_text = 0
            opacity_cross = 0
            trial_break = True
        if trial_counter == n_trial_break_two and repeat_trial == False:
            opacity_text = 0
            opacity_cross = 0
            trial_break = True
        if trial_counter == n_trial_break_three and repeat_trial == False:
            opacity_text = 0
            opacity_cross = 0
            trial_break = True
    CodeComponent lsl_trial_accuracy
      Code Type = Py
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      Begin Routine:
        #Push screen target
        screen_outlet.push_sample(psychopy_markers[1])
        target_present_marker_count = 0
      End Routine:
        ##Push accuracy and if conditions change
        if repeat_trial == True:
            screen_outlet.push_sample(psychopy_markers[5]) #repeated trial
        else:
            #Push whether correct or incorrect button presses
            if correct_response == True:
                screen_outlet.push_sample(psychopy_markers[3]) #correct response
            elif correct_response == False:
                screen_outlet.push_sample(psychopy_markers[4]) #incorrect response

            #Push whether target squares stayed identical or not
            if decider_randomisation == 0:
                screen_outlet.push_sample(psychopy_markers[6]) #identical squares
            elif decider_randomisation == 1: #color_or_position -> 1 = color change, 2 = location change
                if color_or_position == 1:
                    screen_outlet.push_sample(psychopy_markers[7])
                elif color_or_position == 2:
                    screen_outlet.push_sample(psychopy_markers[8])
  Routine pause_practice
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    TextComponent next_round_text
      letterHeight = 0.05
      opacity [set every repeat] = opacity_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text = Nächste Runde beginnt
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    PolygonComponent repeat_cross
      fillColor = black
      lineColor = black
      opacity [set every repeat] = opacity_cross
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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    TextComponent accuracy_text_screen
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text [set every frame] = $accuracy_text
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  Routine pause_trial
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    CodeComponent lsl_iti_trial
      Code Type = Auto->JS
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      Begin Routine:
        #sending first iti for practice
        screen_outlet.push_sample(psychopy_markers[2])
    TextComponent next_round_text_trial
      letterHeight = 0.05
      opacity [set every repeat] = opacity_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text = Nächste Runde beginnt
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    PolygonComponent repeat_trial_cross
      fillColor = black
      lineColor = black
      opacity [set every repeat] = opacity_cross
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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  Routine fixation_trial
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    PolygonComponent fix_cross5
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    CodeComponent lsl_fixation_trial
      Code Type = Auto->JS
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      Begin Routine:
        #Push fixation
        screen_outlet.push_sample(psychopy_markers[0])
        fixation_marker_count = 0
  Routine ITI_preparation_trial
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    PolygonComponent practice_iti_500
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent lsl_iti
      Code Type = Auto->JS
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      Begin Routine:
        #sending first iti for practice
        #screen_outlet.push_sample([screen_markers[2]])
  Routine pre_setup
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    KeyboardComponent test_condition
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Participation_start_main
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    TextComponent Start_main_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wenn Sie bereit sind, drücken Sie die rechte oder die linke Taste, um mit der Testphase zu starten.

        Viel Erfolg!
    KeyboardComponent Response_left_right
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_of_part_one
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    TextComponent end_part_one
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ende des ersten Durchgangs. Machen Sie nun gerne eine Pause und sagen Sie der Versuchsleiterin Bescheid.
    KeyboardComponent part_one_ending
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Participation_start_parttwo
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    TextComponent start_part_two
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wenn Sie bereit sind, drücken Sie die rechte oder die linke Taste, um mit dem zweiten Teil der Testphase zu starten.

        Viel Erfolg!
    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sqr_trial_parttwo
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    PolygonComponent fixation_parttwo
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent sqr1_trial_parttwo
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent sqr2_trial_parttwo
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent sqr3_trial_parttwo
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent sqr4_trial_parttwo
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine End_Part_One
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    CodeComponent break_btw_trials
      Code Type = Auto->JS
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      Begin Routine:
        if trial_break == False:
            continueRoutine = False
    TextComponent break_partone
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank, Sie können nun eine Pause machen!

        Wenn Sie bereit sind, drücken Sie die rechte oder die linke Taste, um fortzufahren.
    KeyboardComponent continue_partone
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Certainty_Check
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    TextComponent certainty_btw_blocks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch, dieser Teil ist geschafft!

        Wie sicher waren Sie sich bei der Mehrheit der Antworten auf einer Skala von 1 (sehr unsicher) bis 10 (sehr sicher)?
    KeyboardComponent response_certainty
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent certainty_check_btw_blocks
      Code Type = Auto->JS
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      Begin Routine:
        if trial_break == False:
            continueRoutine = False
  Routine fixation_baseline
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    PolygonComponent fixation_base
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine pre_setup
  Routine instruction
  Routine ITI_preparation_trial
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine fixation_baseline
    Routine sqr_practice
    Routine fixation
    Routine square_ident
    Routine pause_practice
  LoopTerminator trials_practice
  Routine start_test
  Routine Participation_start_main
  Routine ITI_preparation_trial
  LoopInitiator trials_trial loopType="TrialHandler"
    loopType = random
    nReps = 300
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    Routine fixation_baseline
    Routine sqr_trial
    Routine fixation_trial
    Routine sqr_ident_trial
    Routine pause_trial
    Routine Certainty_Check
    Routine End_Part_One
  LoopTerminator trials_trial
  Routine Certainty_Check
  Routine goodbye
