PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = wp3_smts
  keyboardBackend = PsychToolbox
  logging level = data
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Routines
  Routine fixation
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    PolygonComponent fix
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    CodeComponent lsl_fixation_practice
      Code Type = Auto->JS
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      Begin Routine:
        #Push screen fixation
        #screen_outlet.push_sample(screen_markers[0])
        #fixation_marker_count = 0
  Routine button_press
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    KeyboardComponent key_resp_2
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen beim SMTS. Bei diesem Test werden sie erst vier Quadrate in vier verschiedenen Farben sehen. Nach einer kurzen Pause werden erneut vier Quadrate sehen, bei denen sie folgende Entscheidung treffen sollen:
        - Sind die Quadrate in Farbe und Position identisch? Dann drücken sie "p"
        - Unterscheiden sich die Quadrate in der Farbe, der Position, oder beidem? Dann drücken sie "q"
        Möchten Sie die Quadrate erneut anschauen, weil sie sich nicht sicher sind, dann drücken sie bitte "p" und "q" gleichzeitig.

        Wenn Sie bereit sind, drücken Sie einen der Knöpfe um den Testdurchlauf zu starten
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent lsl_initiation
      Code Type = Auto->JS
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      Before Experiment:
        # Initiate LSL
        import pylsl

        # Make stream outlets & info for each "marker" we want to push, and a corresponding outlet
        print('Creating a new streaminfo...')
        screen_info = pylsl.StreamInfo('screen_markers', 'screen_pres', 1, 0, 'string')
        behav_info = pylsl.StreamInfo('button_press', 'beh', 1, 0, 'string')

        print('Opening an outlet...')
        screen_outlet = pylsl.StreamOutlet(screen_info)
        behav_outlet = pylsl.StreamOutlet(behav_info)

        print("now sending markers...")
        screen_markers = [['Fixation'], ['Target'], ['ITI']]
        behav_markers = [['Correct'], ['Incorrect'], ['Repeat']]
        condition_markers = [['Color_Change'], ['Locat_Change'], ['Color_Locat_Change'], ['Identical']]
    CodeComponent setup
      Code Type = Auto->JS
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      Begin Experiment:
        #Setup some of the variables that are used for experiment
        import time
        grace_period = 0.5 #upper time limit for button presses
        practice_counter = 0 #keep track of practice trials
        trial_counter = 0 #keep track of test trial we are in
        repeat_trial = False #default is set to continuing with next trial

        #Set up lists with possible conditions for practice and trials
        #Conditions: Squares stay identical, color change, location change, both change
        practice_list = [0]*4 + [1]*4 + [2]*4 + [3]*4 #16 practice trials
        shuffle(practice_list)
        test_list = [0]*20 + [1]*20 + [2]*20 + [3]*20 #80 test trials
        shuffle(test_list)

        #Color palette
        potential_colors = ['white', 'black', 'red', 'green', 'blue', 'orange', 'pink', 'purple', 'cyan', 'magenta', 'lightsteelblue', 'yellow', 'lightgreen']

        #Create unique locations so no locations of squares are overlapping
        def unique_locations(upper_limit):
            potential_location = []
            while len(potential_location) < upper_limit:
                potential_coord = 0.1*randint(-3,3)
                if potential_coord != 0 and not(potential_coord in potential_location):
                    potential_location.append(potential_coord)
            return potential_location

        def square_manipulation(squares_list, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, practice_switch):
            if decider_randomisation == 1: # if change
                if color_or_position == 0: #color changes
                  change_square = squares_list[square_to_change]
                  change_square.color = colors[4]
                  if practice_switch == 0: #only save for trial, not for practice
                    thisExp.addData('label_square', "Color_Change")
                elif color_or_position == 1: #position changes
                  change_square = squares_list[square_to_change]
                  change_square.pos = (x_coord[4], y_coord[4])
                  if practice_switch == 0:
                    thisExp.addData('label_square', "Locat_Change")
                elif color_or_position == 2: #color and position change
                  change_square = squares_list[square_to_change]
                  change_square.pos = (x_coord[4], y_coord[4])
                  change_square.color = colors[4]
                  if practice_switch == 0:
                    thisExp.addData('label_square', "Color_Locat_Change")

        #Practice
        response_accuracy_practice = []
        repeat_trial_practice = False

        #Test trials
        response_accuracy_trial = []
  Routine start_training
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    TextComponent starting_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wenn Sie bereit sind, drücken Sie einen der Knöpfe um den Testdurchlauf zu starten
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    KeyboardComponent beginn_training
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_test
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    TextComponent starting_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Nun beginnt der richtige Test
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    KeyboardComponent beginn_test
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine square_ident
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    PolygonComponent fix_cross2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_1
      fillColor = white
      pos = (-0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_2
      fillColor = yellow
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_3
      fillColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_4
      fillColor = blue
      pos = (0.4, 0.4)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key
      allowedKeys = 'p','q'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent practice_button_presses
      Code Type = Auto->JS
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      Begin Routine:
        ###### Randomization of location and color ######

        #Create list with all four squares that are used for comparison
        squares_test = [sqr_ident_1, sqr_ident_2, sqr_ident_3, sqr_ident_4]

        #Register possible buttons
        p_pressed = 0
        q_pressed = 0

        #Create variables for position and color
        #Set these to be identical to squares that were first displayed
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]

        square_manipulation(squares_test, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, 1)
      Each Frame:
        #Create conditions that register button presses
        #Decide whether last trial is repeated or if we go to the next trial

        #Generate variable for time and grace period during which two buttons can be pressed

        if q_pressed == 0 and 'q' in response_key.keys: #only q is pressed
            q_pressed = time.time()
            #thisExp.addData('button_press', "response_q")
        elif p_pressed == 0 and 'p' in response_key.keys: #only p is pressed
            p_pressed = time.time()
            #thisExp.addData('button_press', "response_p")
        elif q_pressed != 0 and p_pressed != 0: #q and p are pressed within grace period: last trial is repeated
            repeat_last_practice.finished = False
            repeat_trial_practice = True
            continueRoutine = False
            #thisExp.addData('button_press', "response_p_and_q")
        #q and p are pressed outside of grace period: last trial is not repeated
        elif (q_pressed != 0 and (time.time() - q_pressed) > grace_period) or (p_pressed != 0 and (time.time() - p_pressed) > grace_period):
            repeat_last_practice.finished = True
            repeat_trial_practice = False
            continueRoutine = False
      End Routine:
        #Create variable for accuracy (correct button presses)
        #Squares are identical -> decider_randomisation == 0 -> "p"
        #Squares are not identical (change of color/location) -> decider_randomisation != 0 -> "q"

        if p_pressed != 0 and q_pressed != 0:  #p and q pressed: repeat trial
            pass
        elif p_pressed != 0 and decider_randomisation == 0: #squares identical
            response_accuracy_practice.append(1)
            thisExp.addData('response_accuracy', "Correct")
        elif q_pressed != 0 and decider_randomisation != 0: #squares not identical
            response_accuracy_practice.append(1)
            thisExp.addData('response_accuracy', "Correct")
        else:
            response_accuracy_practice.append(0) #wrong button was pressed
            thisExp.addData('response_accuracy', "Incorrect")
    CodeComponent lsl_practice_accuracy
      Code Type = Auto->JS
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      Begin Routine:
        #Push target presentation and accuracy
        #screen_outlet.push_sample(screen_markers[1])
        #target_present_marker_count = 0
      End Routine:
        #Push accuracy: correct and incorrect button presses
        #if (p_pressed != 0 or q_pressed != 0) and (time.time() - p_pressed) < grace_period:
        #    if target_present_marker_count == 0:
        #        if accuracy_button_press_trial == 1:
        #            behav_outlet.push_sample(behav_markers[0]) #correct response
        #            target_present_marker_count += 1
        #        else:
        #            behav_outlet.push_sample(behav_markers[1]) #incorrect response
        #            target_present_marker_count += 1

        #Push whether target stayed identical or not
        #if decider_randomisation == 0:
        #    screen_outlet.push_sample(condition_markers[3]) #identical squares
        #elif decider_randomisation == 1: #color_or_position -> 0 = color change, 1 = location change, 2 = both change
        #     screen_outlet.push_sample(condition_markers[color_or_position])
  Routine square_ident_test
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    PolygonComponent sqr_ident_test_1
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_2
      fillColor = yellow
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_3
      fillColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_test_4
      fillColor = blue
      pos = (-0.1, -0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key_test
      allowedKeys = 'p','q','r','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares
        squares_test = [sqr_ident_test_1, sqr_ident_test_2, sqr_ident_test_3, sqr_ident_test_4]

        #0 or 1 gives decision which condition is used
        decider = randint(0,2)

        #Squares change from presentation to decision
        if repeat_trial == False and decider == 1:
            x_coord_ident = [0.1*randint(-5,5) for i in range(len(squares_test))]
            y_coord_ident = [0.1*randint(-5,5) for i in range(len(squares_test))]
        #Squares do not change from presentation to decision
        if repeat_trial == False and decider == 0:
            x_coord_ident = x_coord
            y_coord_ident = y_coord

        sqr_ident_test_1.pos = (x_coord_ident[0], y_coord_ident[0])
        sqr_ident_test_2.pos = (x_coord_ident[1], y_coord_ident[1])
        sqr_ident_test_3.pos = (x_coord_ident[2], y_coord_ident[2])
        sqr_ident_test_4.pos = (x_coord_ident[3], y_coord_ident[3])
      Each Frame:
        #Check if trial is repeated
        if response_key_test.keys:
            for key in response_key_test.keys:
                if key == 'r' or key == 's':
                    repeat_test.finished = False
                    repeat_trial = True
                else:
                    repeat_test.finished = True
                    repeat_trial = False
  Routine end_training
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Vielen Dank für die Teilnahme!
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    KeyboardComponent end_experiment
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sqr_practice
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    PolygonComponent fix_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr1
      fillColor = white
      pos [set every repeat] = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr2
      fillColor = yellow
      pos [set every repeat] = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr3
      fillColor = blue
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr4
      fillColor = red
      pos = (0.4, 0.4)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent practice_location_color
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares

        #Create list with four squares and one with potential colors to choose from
        squares_test = [sqr1, sqr2, sqr3, sqr4]

        #If task is not repeated, go on to next one
        if repeat_trial_practice == False:
             practice_counter = practice_counter + 1
             x_coord = unique_locations(5) #Create one extra position in case location changes
             y_coord = unique_locations(5) #Create one extra position in case location changes
             color_indices = randchoice(len(potential_colors), 5, replace = False) #get 5 indices to create one extra color
             colors = [potential_colors[i] for i in color_indices] #select shuffled colours
             if practice_list[practice_counter] == 0:
                decider_randomisation = 0 #squares stay the same
                color_or_position = 0
             elif practice_list[practice_counter] != 0:
                decider_randomisation = 1 #squares change (color, position, both)
                color_or_position = practice_list[practice_counter]
             #decider_randomisation = randint(0,2) # should anything be randomized
             #color_or_position = randint(0,3) # color or position
             square_to_change = randint(0,4) # for which square

        # set first squares with respective color and location
        # the created extra 5th location/color is not used here
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]
  Routine sqr_trial
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    PolygonComponent fix_cross_trial
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr1_trial
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr2_trial
      fillColor = green
      lineColor = green
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr3_trial
      fillColor = red
      lineColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent sqr4_trial
      fillColor = blue
      lineColor = blue
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent trial_location_color
      Code Type = Auto->JS
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      Begin Routine:
        #Randomize locations of squares

        #Create list with four squares and one with potential colors to choose from
        squares_trial = [sqr1_trial, sqr2_trial, sqr3_trial, sqr4_trial]

        #If task is not repeated, go on to next one
        #New location, color and decision whether second set of stimuli
        #is going to be the same or with different properties
        if repeat_trial == False:
             trial_counter = trial_counter + 1
             x_coord = unique_locations(5) #Create one extra position in case location changes
             y_coord = unique_locations(5) #Create one extra position in case location changes
             color_indices = randchoice(len(potential_colors), 5, replace = False) #get 5 indices to create one extra color
             colors = [potential_colors[i] for i in color_indices] #select shuffled colours
             if test_list[trial_counter] == 0:
                decider_randomisation = 0 #squares stay the same
                color_or_position = 0
             elif test_list[trial_counter] != 0:
                decider_randomisation = 1 #squares change (color, position, both)
                color_or_position = test_list[trial_counter]
             #decider_randomisation = randint(0,2) # should anything be randomized
             #color_or_position = randint(0,3) # color or position
             square_to_change = randint(0,4) # for which square


        # set first squares with respective color and location
        # the created extra 5th location/color is not used here
        for i in range(len(squares_trial)):
             current_square = squares_trial[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]
  Routine sqr_ident_trial
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    PolygonComponent fix_cross_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_1_trial
      fillColor = white
      pos = (0.1, 0.1)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_2_trial
      fillColor = green
      lineColor = green
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_3_trial
      fillColor = red
      lineColor = red
      pos = (0.3, 0.3)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent sqr_ident_4_trial
      fillColor = blue
      lineColor = blue
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key_trial
      allowedKeys = 'p','q'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent trial_button_presses
      Code Type = Auto->JS
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      Begin Routine:
        ###### Randomization of location and color ######

        #Register possible buttons
        p_pressed = 0
        q_pressed = 0

        #Create list with all four squares that are used for comparison
        squares_test = [sqr_ident_1_trial, sqr_ident_2_trial, sqr_ident_3_trial, sqr_ident_4_trial]

        #Create variables for position and color
        #Set these to be identical to squares that were first displayed
        for i in range(len(squares_test)):
             current_square = squares_test[i]
             current_square.pos = (x_coord[i], y_coord[i])
             current_square.color = colors[i]

        square_manipulation(squares_test, x_coord, y_coord, colors, decider_randomisation, color_or_position, square_to_change, 0)
      Each Frame:
        #Create conditions that register button presses
        #Decide whether last trial is repeated or if we go to the next trial

        if q_pressed == 0 and 'q' in response_key_trial.keys: #only q is pressed
            q_pressed = time.time()
            thisExp.addData('button_press', "response_q")
        elif p_pressed == 0 and 'p' in response_key_trial.keys: #only p is pressed
            p_pressed = time.time()
            thisExp.addData('button_press', "response_p")
        elif q_pressed != 0 and p_pressed != 0: #q and p are pressed within grace period: last trial is repeated
            repeat_last_trial.finished = False
            repeat_trial = True
            continueRoutine = False
            thisExp.addData('button_press', "response_p_and_q")
        #q and p are pressed outside of grace period: last trial is not repeated
        elif (q_pressed != 0 and (time.time() - q_pressed) > grace_period) or (p_pressed != 0 and (time.time() - p_pressed) > grace_period):
            repeat_last_trial.finished = True
            repeat_trial = False
            continueRoutine = False
      End Routine:
        #Create variable for accuracy (correct button presses)
        #Squares are identical -> decider_randomisation == 0 -> "p"
        #Squares are not identical (change of color/location) -> decider_randomisation != 0 -> "q"

        if p_pressed != 0 and q_pressed != 0 and ((time.time() - p_pressed) < grace_period): #p and q pressed: repeat trial
            pass
        elif p_pressed != 0 and decider_randomisation == 0: #squares identical
            response_accuracy_trial.append(1)
            thisExp.addData('response_accuracy', "Correct")
        elif q_pressed != 0 and decider_randomisation != 0: #squares not identical
            response_accuracy_trial.append(1)
            thisExp.addData('response_accuracy', "Correct")
        else:
            response_accuracy_trial.append(0) #wrong button was pressed
            thisExp.addData('response_accuracy', "Incorrect")


        print('-----------------')
        print('we are in trial no:', trial_counter)
        print('randomization:', decider_randomisation)
        #print('response:', response_randomisation)
        if repeat_trial == True:
            print('!!!!REPEAT!!!!')
        if repeat_trial == False:
            print('list of results:', response_accuracy_trial)
    CodeComponent lsl_trial_accuracy
      Code Type = Auto->JS
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      Begin Routine:
        #Push screen target
        screen_outlet.push_sample(screen_markers[1])
        target_present_marker_count = 0
      End Routine:
        #Push accuracy: correct and incorrect button presses
        if (p_pressed != None or q_pressed != None) and (time.time() - p_pressed) < grace_period:
            if target_present_marker_count == 0:
                if response_accuracy_trial == 1:
                    behav_outlet.push_sample(behav_markers[0]) #correct response
                    target_present_marker_count += 1
                else:
                    behav_outlet.push_sample(behav_markers[1]) #incorrect response
                    target_present_marker_count += 1

        #Push whether target squares stayed identical or not
        if decider_randomisation == 0:
            screen_outlet.push_sample(condition_markers[3]) #identical squares
        elif decider_randomisation == 1: #color_or_position -> 0 = color change, 1 = location change, 2 = both change
            screen_outlet.push_sample(condition_markers[color_or_position])
  Routine Practice_ITI
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    PolygonComponent practice_iti_500
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent lsl_practice_iti
      Code Type = Auto->JS
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      Begin Routine:
        #sending first iti for practice
        #screen_outlet.push_sample([screen_markers[2]])
  Routine pause_practice
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    TextComponent pause_btw_trials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent fix_cross3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent lsl_iti_practice
      Code Type = Auto->JS
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      Begin Routine:
        #sending first iti for practice
        #screen_outlet.push_sample(screen_markers[2])
  Routine pause_trial
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    PolygonComponent fix_cross4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent lsl_iti_trial
      Code Type = Auto->JS
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      Begin Routine:
        #sending first iti for practice
        screen_outlet.push_sample(screen_markers[2])
  Routine fixation_trial
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    PolygonComponent fix_cross5
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    CodeComponent lsl_fixation_trial
      Code Type = Auto->JS
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      Begin Routine:
        #Push fixation
        screen_outlet.push_sample(screen_markers[0])
        fixation_marker_count = 0
Flow
  Routine instruction
  Routine Practice_ITI
  LoopInitiator trials_practice loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    LoopInitiator repeat_last_practice loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 5
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      Routine sqr_practice
      Routine fixation
      Routine square_ident
      Routine pause_practice
    LoopTerminator repeat_last_practice
  LoopTerminator trials_practice
  Routine start_test
  LoopInitiator trials_trial loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator repeat_last_trial loopType="TrialHandler"
      loopType = random
      nReps = 8
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      Routine sqr_trial
      Routine fixation_trial
      Routine sqr_ident_trial
      Routine pause_trial
    LoopTerminator repeat_last_trial
  LoopTerminator trials_trial
  Routine goodbye
